# Generated by Configurator on Sun Jul 22 14:20:45 EDT 2018

# Reset
Property,Core,Initialize,0

# Devices
Device,COM5,SerialManager,COM5
Device,COM10,SerialManager,COM10
Device,COM4,SerialManager,COM4
Device,pE4000,CoolLED-pE4000,pE4000
Device,C13440,HamamatsuHam,HamamatsuHam_DCAM
Device,ScopeLED-B,FreeSerialPort,FreeSerialPort
Device,Arduino,FreeSerialPort,FreeSerialPort
Device,Andor,Andor,Andor

# Pre-init settings for devices
Property,pE4000,Port,COM4
Property,ScopeLED-B,Port,COM5
Property,Arduino,Port,COM10
Property,Andor,Camera,| iXon Ultra | DU888_BV | 11168 |

# Pre-init settings for COM ports
Property,COM5,AnswerTimeout,500.0000
Property,COM5,BaudRate,115200
Property,COM5,DelayBetweenCharsMs,0.0000
Property,COM5,Handshaking,Off
Property,COM5,Parity,None
Property,COM5,StopBits,1
Property,COM5,Verbose,1
Property,COM10,AnswerTimeout,500.0000
Property,COM10,BaudRate,115200
Property,COM10,DelayBetweenCharsMs,0.0000
Property,COM10,Handshaking,Off
Property,COM10,Parity,None
Property,COM10,StopBits,1
Property,COM10,Verbose,1
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,115200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1

# Hub (parent) references

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,Andor
Property,Core,Shutter,pE4000
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

